PsychoPy2experiment version="2022.2.1"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[1,1,1]
  expName = 041SROP_vABA
  keyboardBackend = ioHub
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Routines
  Routine instructions
    TextComponent t_instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        This experiment consists of two parts. In the first part, you are going to see 32 videos of 2 three-syllable sequences consisting of sign-like gestures. Try to memorize the first sequence.

        After having seen the first sequence, you should decide whether or not the second sequence was identical to the first one. Click "Y" if you think that the second sequence was identical to the first one. Click "N" if you think that the second sequence was not identical to the first one. If you are unsure, trust your intuition.
    TextComponent t_instructions_endbutton
      color = black
      letterHeight = 0.05
      pos = (.63, -.43)
      startVal [time (s)] = 0.0
      text = Click here to continue
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    MouseComponent t_instructinos_mouse
      clickable = t_instructions_endbutton
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine introduction
    TextComponent welcome
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = Hello, and thanks for choosing to participate!
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    TextComponent welcome_endbutton
      color = black
      letterHeight = 0.05
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = Click here to continue
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    MouseComponent welcome_mouse
      clickable = welcome_endbutton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine begin
    TextComponent t_begin
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = Ready to begin?
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    TextComponent t_begin_endbutton
      color = black
      letterHeight = 0.05
      pos = (.6, -.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = Click here to continue
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    MouseComponent t_begin_mouse
      clickable = t_begin_endbutton
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine trial1
    MovieComponent ABA13
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-13.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 0.0
      units = height
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    MovieComponent ABA8
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-8.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 6
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  Routine trial2
    MovieComponent ABA16
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-16.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 2.0
      units = height
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    MovieComponent ABA9
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-9.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 8
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  Routine trial1_response
    TextComponent Match1
      color = black
      letterHeight = 0.1
      pos [set every repeat] = (0,.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = Identical?
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    TextComponent yes1
      color = black
      letterHeight = 0.1
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = Y
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    TextComponent no1
      color = black
      letterHeight = 0.1
      pos = (.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = N
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    MouseComponent response1_mouse
      clickable = yes1, no1
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine trial2_response
    TextComponent Match2
      color = black
      letterHeight = 0.1
      pos [set every repeat] = (0,.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = Identical?
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    TextComponent yes2
      color = black
      letterHeight = 0.1
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = Y
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    TextComponent no2
      color = black
      letterHeight = 0.1
      pos = (.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = N
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    MouseComponent response2_mouse
      clickable = yes2, no2
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine trial3
    MovieComponent ABA15
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-15.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 2
      units = height
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    MovieComponent ABA15_2
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-15.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 8
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  Routine trial3_response
    TextComponent Match3
      color = black
      letterHeight = 0.1
      pos [set every repeat] = (0,.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = Identical?
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    TextComponent yes3
      color = black
      letterHeight = 0.1
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = Y
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    TextComponent no3
      color = black
      letterHeight = 0.1
      pos = (.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = N
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    MouseComponent Response3_mouse
      clickable = yes3, no3
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine trial4
    MovieComponent ABA2
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-2.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 2
      units = height
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    MovieComponent ABA2_2
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-2.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 8
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  Routine trial4_response
    TextComponent Match4
      color = black
      letterHeight = 0.1
      pos [set every repeat] = (0,.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = Identical?
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    TextComponent yes4
      color = black
      letterHeight = 0.1
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = Y
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    TextComponent no4
      color = black
      letterHeight = 0.1
      pos = (.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = N
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    MouseComponent response4_mouse
      clickable = yes4, no4
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine trial5
    MovieComponent ABA7
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-7.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 2
      units = height
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    MovieComponent ABA6
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-6.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 8
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  Routine trial5_response
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  Routine trial6
    MovieComponent ABA13_2
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-13.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 2
      units = height
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    MovieComponent ABA13_3
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-13.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 8
      stopVal [duration (s)] = 4
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  Routine trial6_response
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  Routine trial7
    MovieComponent ABA7_2
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-7.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 2
      units = height
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    MovieComponent ABA7_3
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-7.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 8
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  Routine trial7_response
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  Routine trial8
    MovieComponent ABA9_2
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-9.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 2
      units = height
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    MovieComponent ABA2_3
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-2.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 8
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  Routine trial8_response
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  Routine trial9
    MovieComponent ABA4
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-4.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 2
      units = height
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    MovieComponent ABA4_2
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-4.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 8
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  Routine trial9_response
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  Routine trial10
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  Routine trial10_response
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  Routine trial11
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  Routine trial11_response
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  Routine trial12
    MovieComponent ABA12
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-12.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 0.0
      units = height
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    MovieComponent ABA12_2
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-12.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 5
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  Routine trial12_response
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  Routine trial13
    MovieComponent ABA2_4
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-2.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 2
      units = height
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    MovieComponent ABA7_4
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-7.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 8
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  Routine trial13_response
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  Routine trial14
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  Routine trial14_response
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  Routine trial15
    MovieComponent ABA3
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-3.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 2
      units = height
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    MovieComponent ABA3_2
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-3.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 8
      stopVal [duration (s)] = 4
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  Routine trial15_response
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  Routine trial16
    MovieComponent ABA14
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-14.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 2
      units = height
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    MovieComponent ABA10
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-10.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 8
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  Routine trial16_response
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  Routine trial17
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  Routine trial17_response
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  Routine trial19_2
  Routine trial18
    MovieComponent ABA_11
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-11.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 2
      units = height
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    MovieComponent ABA_5
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-5.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 8
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  Routine trial18_response
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  Routine trial20
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  Routine trial20_response
  Routine trial19
    MovieComponent ABA4_3
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = False
      movie [set every repeat] = ABAstim/ABA-4.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 2
      units = height
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    MovieComponent ABA1
      No audio = True
      backend = ffpyplayer
      durationEstim = 4
      forceEndRoutine = True
      movie [set every repeat] = ABAstim/ABA-5.mp4
      size [set every repeat] = [1.5,0.8]
      startVal [time (s)] = 8
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  Routine trial19_response
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Flow
  Routine introduction
  Routine instructions
  Routine begin
  Routine trial1
  Routine trial1_response
  Routine trial2
  Routine trial2_response
  Routine trial3
  Routine trial3_response
  Routine trial4
  Routine trial4_response
  Routine trial5
  Routine trial5_response
  Routine trial6
  Routine trial6_response
  Routine trial7
  Routine trial7_response
  Routine trial8
  Routine trial8_response
  Routine trial9
  Routine trial9_response
  Routine trial10
  Routine trial10_response
  Routine trial11
  Routine trial11_response
  Routine trial12
  Routine trial12_response
  Routine trial13
  Routine trial13_response
  Routine trial14
  Routine trial14_response
  Routine trial15
  Routine trial15_response
  Routine trial16
  Routine trial16_response
  Routine trial17
  Routine trial17_response
  Routine trial18
  Routine trial18_response
  Routine trial19
  Routine trial19_response
  Routine trial20
  Routine trial20_response
